PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = word priming
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase '},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'case'},
      {'study_word': 'pastry'},
      {'study_word': 'police'},
      {'study_word': 'poster'},
      {'study_word': 'keys'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'v_s_ '},
      {'test': 't_g_r'},
      {'test': 'b_o_'},
      {'test': 'c_s_i_n'},
      {'test': 'p_a_o'},
      {'test': '_h_n_'},
      {'test': 'ma_b_e'},
      {'test': 'l-pt-p'},
      {'test': 'ch__t'},
      {'test': 'T-s_i_t'},
      {'test': '_o_s_'},
      {'test': 'c_s_'},
      {'test': 'p_s_r_'},
      {'test': '_o_i_e'},
      {'test': 'p_s_e_'},
      {'test': 'ke_s'}]
    Routine test
  LoopTerminator trials_2
